PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[0.522,0.506,0.412]
  expName = food_ratings
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Routines
  Routine instruct
    TextComponent instructions
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Please complete the following ratings.

        Press enter to start
    KeyboardComponent trigger
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine liking
    ImageComponent food
      image [set every repeat] = $ImageFile
      pos = (-7,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent like_q
      color = Black
      letterHeight = 30
      pos = (-200, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How much do you like this or dislike this food?
      wrapWidth = 1000
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    SliderComponent like_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Most disliked sensation imaginable','Dislike extremely','Dislike very much','Dislike moderately','Dislike slightly','Neutral','Like slightly','Like moderately','Like very much','Like extremely','Most liked sensation imaginable'
      pos = (700,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = -100, -62.89, -41.58, -17.59, -5.92, 0, 6.25, 17.82, 44.43, 65.72, 100
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    CodeComponent like_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        like_slider.marker.size=(2,.1);
        like_slider.marker.color='Red';

        mouse.setPos((0,0))
        like_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        like_slider.markerPos=(x // 5)

        if mouse.getPressed()[0]:
            food_items.addData('Like', like_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname
      color = black
      letterHeight = 50
      pos = (-150, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine familiarity
    ImageComponent food_2
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent familiar_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How familiar is this food?
      wrapWidth = 1000
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    SliderComponent familiar_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Not familiar at all','More familiar than anything'
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    CodeComponent familiar_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        familiar_slider.marker.size=(.1,2)
        familiar_slider.marker.color='Red'

        mouse.setPos((-500,0))
        familiar_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        familiar_slider.markerPos= 500 + (x)

        if mouse.getPressed()[0]:
            food_items.addData('Familiar', familiar_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname_2
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine filling
    ImageComponent food_3
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent filling_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How filling do you expect this food to be?
      wrapWidth = 1000
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    SliderComponent filling_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Not filling at all','More filling than anything'
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    CodeComponent filling_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        filling_slider.marker.size=(.1,2)
        filling_slider.marker.color='Red'

        mouse.setPos((-500,0))
        filling_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        filling_slider.markerPos=500 + (x)


        if mouse.getPressed()[0]:
            food_items.addData('Filling', filling_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname_3
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine frequency
    ImageComponent food_4
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent frequency_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How often do you eat this food?
      wrapWidth = 1000
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    SliderComponent frequency_slider
      color = Black
      forceEndRoutine = False
      granularity = 250
      labels = '<1 x/month','2-3 x/month','1-2 x/week','3-4 x/week','5+ x/week' 
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,250,500,750,1000
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    CodeComponent frequency_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        frequency_slider.marker.size=(.1,2)
        frequency_slider.marker.color='Red'

        mouse.setPos((-500,0))
        frequency_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        frequency_slider.markerPos=500 + (x)


        if mouse.getPressed()[0]:
            food_items.addData('Frequency', frequency_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname_4
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine healthy
    ImageComponent food_5
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent healthy_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How healthy is this food?
      wrapWidth = 1000
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    SliderComponent healthy_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Not healthy at all','More healthy than anything'
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    CodeComponent healthy_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        healthy_slider.marker.size=(.1,2)
        healthy_slider.marker.color='Red'

        mouse.setPos((-500,0))
        healthy_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        healthy_slider.markerPos=500 + (x)


        if mouse.getPressed()[0]:
            food_items.addData('Healthy', healthy_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname_5
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine calories
    ImageComponent food_6
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent calorie_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How many calories are in this portion?
      wrapWidth = 1000
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    SliderComponent calorie_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = '0','60','120','180','240'
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,250,500,750,1000
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    CodeComponent calorie_code
      Code Type = Py
      Begin Routine:
        #make and hide mouse
        mouse = event.Mouse(visible=False)

        #marker display options
        calorie_slider.marker.size=(.1,2)
        calorie_slider.marker.color='Red'

        #set mouse and marker positions
        mouse.setPos((-500,0))
        calorie_slider.markerPos=0
      Each Frame:
        #tie mouse to marker position
        x = mouse.getPos()[0]
        calorie_slider.markerPos=500 + (x)

        #write marker position on click
        if mouse.getPressed()[0]:
            food_items.addData('calorie', calorie_slider.markerPos)
            continueRoutine = False
      End Routine:
        #take a nap
        core.wait(0.5)
    TextComponent foodname_6
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine dense
    ImageComponent food_7
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent dense_q
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = How energy dense is this food?
      wrapWidth = 1000
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    SliderComponent dense_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Not energy dense at all','More energy dense than anything'
      pos = (0, -350)
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    CodeComponent dense_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        dense_slider.marker.size=(.1,2)
        dense_slider.marker.color='Red'

        mouse.setPos((-500,0))
        dense_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        dense_slider.markerPos=500 + (x)

        if mouse.getPressed()[0]:
            food_items.addData('Dense', dense_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent foodname_7
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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  Routine end
    TextComponent bye
      color = Black
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
      wrapWidth = 1000
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Flow
  Routine instruct
  LoopInitiator food_items loopType="TrialHandler"
    conditionsFile = ImageFiles_Cropped.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'ImageFiles_Cropped/AmericanCheese_120_cropped.jpg'), ('Name', 'American Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BabybelCheeseWheels_120_cropped.jpg'), ('Name', 'Babybel Cheese Wheels')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/Bagel_120_cropped.jpg'), ('Name', 'Bagel')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BakedBeans_120_cropped.jpg'), ('Name', 'Baked Beans')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BananaNutBread_120_cropped.jpg'), ('Name', 'Banana Nut Bread')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BlueCheese_120_cropped.jpg'), ('Name', 'Blue Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BreakfastSausage_120_cropped.jpg'), ('Name', 'Breakfast Sausage')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BrieCheese_120_cropped.jpg'), ('Name', 'Brie Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/CheeseAndCrackers_120_cropped.jpg'), ('Name', 'Cheese and Crackers')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ChocolateCoveredPretzels_120_cropped.jpg'), ('Name', 'Chocolate Covered Pretzels')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ChocolateRaisins_120_cropped.jpg'), ('Name', 'Chocolate Raisins')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ColbyJackCheese_120_cropped.jpg'), ('Name', 'Colby Jack Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/DeviledEggs_120_cropped.jpg'), ('Name', 'Deviled Eggs')])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
    Routine liking
    Routine familiarity
    Routine filling
    Routine frequency
    Routine healthy
    Routine calories
    Routine dense
  LoopTerminator food_items
  Routine end
