PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[0.522,0.506,0.412]
  expName = macro_auction
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Routines
  Routine instruct
    TextComponent instructions
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pictures of food will appear on the screen.
        Make your bid for the food portion shown in the picture.
        You have 5 seconds to make your bid.
        Be quick, but accurate!



        Experimenter: Wait for scanner trigger
    KeyboardComponent trigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent fix
      fillColor = Black
      lineColor = Black
      shape = cross
      size = (65,65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    CodeComponent jitter_code
      Code Type = Py
      Begin Routine:
        #create and hide mouse
        mouse = event.Mouse(visible=False)
  Routine end
    TextComponent done
      color = Black
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = You have completed the task :)
      wrapWidth = 1000
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    KeyboardComponent end_task
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine food
    CodeComponent food_code
      Code Type = Py
      Begin Routine:
        if foodtype == 'fat':
            image_file = fat_images.pop()
        elif foodtype == 'carb':
            image_file = carb_images.pop()
        elif foodtype == 'combo':
            image_file = combo_images.pop()

        thisExp.addData('image_file', image_file)
    ImageComponent food_item
      image [set every repeat] = $image_file
      size = (28,18.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = cm
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  Routine auction
    SliderComponent auction_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = '$0','$2.50','$5'
      size = (1000,30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,500,1000
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    CodeComponent auction_code
      Code Type = Py
      Begin Routine:
        #create and hide mouse
        mouse = event.Mouse(visible=False)

        #start timer
        timer = core.Clock()

        #marker display options
        auction_slider.marker.size=(.1,2)
        auction_slider.marker.color='Red'

        #set mouse and marker positions
        mouse.setPos((0,0))
        auction_slider.markerPos=500

        #start click detector
        didclick = 0
      Each Frame:
        #tie mouse to marker position
        x = 500 + mouse.getPos()[0]
        auction_slider.markerPos=(x)

        #write marker position and RT on click and count it
        if mouse.getPressed()[0]:
            bid_items.addData('Bid', auction_slider.markerPos)
            bid_items.addData('Bid_RT', timer.getTime())
            didclick = 1
            continueRoutine = False
      End Routine:
        #check for null response and timestamp end of routine
        elapsedtime = timer.getTime()
        if didclick == 0:
            bid_items.addData('Bid', 9999)
            bid_items.addData('Bid_RT', 9999)
  Routine auction_sham
    CodeComponent code
      Code Type = Py
      Begin Routine:
        #hide mouse
        mouse = event.Mouse(visible=False)
    SliderComponent auction_slider_sham
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = '$0','$2.50','$5'
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5 - elapsedtime
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,500,1000
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  Routine pause
    PolygonComponent fix_pause
      fillColor = Black
      lineColor = Black
      shape = cross
      size = (65,65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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  Routine choose_prot
    TextComponent choose_text
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: Select protocol 1, 2, or 3 using keyboard
      wrapWidth = 1000
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    KeyboardComponent prot_selection
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent choose_code
      Code Type = Py
      Begin Experiment:
        #create and hide mouse
        mouse = event.Mouse(visible=False)

        #create image lists
        carb_images = ['ImageFiles_Cropped/Bagel_120_cropped.jpg',
        'ImageFiles_Cropped/BakedBeans_120_cropped.jpg',
        'ImageFiles_Cropped/DriedApricots_120_cropped.jpg',
        'ImageFiles_Cropped/FrootLoops_120_cropped.jpg',
        'ImageFiles_Cropped/FrostedFlakes_120_cropped.jpg',
        'ImageFiles_Cropped/FruitSnacks_120_cropped.jpg',
        'ImageFiles_Cropped/GummyBears_120_cropped.jpg',
        'ImageFiles_Cropped/JellyBeans_120_cropped.jpg',
        'ImageFiles_Cropped/LuckyCharms_120_cropped.jpg',
        'ImageFiles_Cropped/PineappleRings_120_cropped.jpg',
        'ImageFiles_Cropped/Pretzels_120_cropped.jpg',
        'ImageFiles_Cropped/Sorbet_120_cropped.jpg']

        fat_images = ['ImageFiles_Cropped/AmericanCheese_120_cropped.jpg',
        'ImageFiles_Cropped/BabybelCheeseWheels_120_cropped.jpg',
        'ImageFiles_Cropped/BlueCheese_120_cropped.jpg',
        'ImageFiles_Cropped/BreakfastSausage_120_cropped.jpg',
        'ImageFiles_Cropped/BrieCheese_120_cropped.jpg',
        'ImageFiles_Cropped/ColbyJackCheese_120_cropped.jpg',
        'ImageFiles_Cropped/DeviledEggs_120_cropped.jpg',
        'ImageFiles_Cropped/HardboiledEggs_120_cropped.jpg',
        'ImageFiles_Cropped/Pepperoni_120_cropped.jpg',
        'ImageFiles_Cropped/StringCheese_120_cropped.jpg',
        'ImageFiles_Cropped/SummerSausage_120_cropped.jpg',
        'ImageFiles_Cropped/SwissCheese_120_cropped.jpg']

        combo_images = ['ImageFiles_Cropped/BananaNutBread_120_cropped.jpg',
        'ImageFiles_Cropped/CheeseAndCrackers_120_cropped.jpg',
        'ImageFiles_Cropped/ChocolateCoveredPretzels_120_cropped.jpg',
        'ImageFiles_Cropped/ChocolateRaisins_120_cropped.jpg',
        'ImageFiles_Cropped/Doritos_120_cropped.jpg',
        'ImageFiles_Cropped/Guacamole_120_cropped.jpg',
        'ImageFiles_Cropped/MiniChocolateChipCookies_120_cropped.jpg',
        'ImageFiles_Cropped/MiniNutterButters_120_cropped.jpg',
        'ImageFiles_Cropped/PeanutbutterAndCrackers_120_cropped.jpg',
        'ImageFiles_Cropped/PizzaRolls_120_cropped.jpg',
        'ImageFiles_Cropped/Pringles_120_cropped.jpg',
        'ImageFiles_Cropped/RoastedRedPepperHummus_120_cropped.jpg']

        #randomize their oder
        shuffle(carb_images)
        shuffle(fat_images)
        shuffle(combo_images)
      Each Frame:
        if prot_selection.keys == '1':
            conditionsFile = 'condition_files/prot1.xlsx'
        elif prot_selection.keys == '2':
            conditionsFile = 'condition_files/prot2.xlsx'
        elif prot_selection.keys == '3':
            conditionsFile = 'condition_files/prot3.xlsx'
Flow
  Routine choose_prot
  Routine instruct
  LoopInitiator bid_items loopType="TrialHandler"
    conditionsFile = $conditionsFile
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine food
    Routine pause
    Routine auction
    Routine auction_sham
  LoopTerminator bid_items
  Routine end
