PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[0.522,0.506,0.412]
  expName = estimated_price
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Routines
  Routine instruct
    TextComponent instructions
      color = Black
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pictures of food will appear on the screen.

        For each item, estimate how much the portion in the picture would cost at a grocery store (e.g. Stop & Shop).

        Click ONCE to make your rating.

        Press enter to begin
    KeyboardComponent trigger
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent done
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
      wrapWidth = 1000
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  Routine food_item
    ImageComponent food
      image [set every repeat] = $ImageFile
      pos = (0,5)
      saveStartStop = False
      size = (28,18.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent estimated_price
      color = Black
      letterHeight = 30
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Grocery store price:
      wrapWidth = 1000
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    SliderComponent price_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = '$0','$2.50','$5'
      pos = (0, -350)
      size = (1000,30)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,500,1000
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    CodeComponent price_code
      Code Type = Py
      Begin Routine:
        #create and hide mouse
        mouse = event.Mouse(visible=False)

        #set marker display options
        price_slider.marker.size=(.1,2)
        price_slider.marker.color='Red'

        #set mouse and marker positions
        mouse.setPos((0,0))
        price_slider.markerPos=500
      Each Frame:
        #tie mouse to marker position
        x = 500 + mouse.getPos()[0]
        price_slider.markerPos=(x)

        #detect and write bid on click
        if mouse.getPressed()[0]:
            food_items.addData('Price', price_slider.markerPos)
            continueRoutine = False
      End Routine:
        #take a nap
        core.wait(1)
    TextComponent foodname
      color = black
      letterHeight = 50
      pos = (0, -200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
      wrapWidth = 1000
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Flow
  Routine instruct
  LoopInitiator food_items loopType="TrialHandler"
    conditionsFile = ImageFiles_Cropped.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'ImageFiles_Cropped/AmericanCheese_120_cropped.jpg'), ('Name', 'American Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BabybelCheeseWheels_120_cropped.jpg'), ('Name', 'Babybel Cheese Wheels')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/Bagel_120_cropped.jpg'), ('Name', 'Bagel')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BakedBeans_120_cropped.jpg'), ('Name', 'Baked Beans')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BananaNutBread_120_cropped.jpg'), ('Name', 'Banana Nut Bread')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BlueCheese_120_cropped.jpg'), ('Name', 'Blue Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BreakfastSausage_120_cropped.jpg'), ('Name', 'Breakfast Sausage')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/BrieCheese_120_cropped.jpg'), ('Name', 'Brie Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/CheeseAndCrackers_120_cropped.jpg'), ('Name', 'Cheese and Crackers')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ChocolateCoveredPretzels_120_cropped.jpg'), ('Name', 'Chocolate Covered Pretzels')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ChocolateRaisins_120_cropped.jpg'), ('Name', 'Chocolate Raisins')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/ColbyJackCheese_120_cropped.jpg'), ('Name', 'Colby Jack Cheese')]),
      OrderedDict([('ImageFile', 'ImageFiles_Cropped/DeviledEggs_120_cropped.jpg'), ('Name', 'Deviled Eggs')])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
    Routine food_item
  LoopTerminator food_items
  Routine end
